// modelName model_0
def model heart_LH_RH_ABD_RL_LL_RC_LC_H_merged as
  def unit J_s2_per_m6 as
    unit second {expo: 2.0};
    unit metre {expo: -6.0};
    unit joule;
  enddef;
  def unit per_s as
    unit second {expo: -1.0};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3.0};
  enddef;
  def unit J_s2_per_m5 as
    unit joule;
    unit second {expo: 2.0};
    unit metre {expo: -5.0};
  enddef;
  def unit J_s_per_m6 as
    unit joule;
    unit metre {expo: -6.0};
    unit second;
  enddef;
  def unit J_s_per_m3 as
    unit joule;
    unit metre {expo: -3.0};
    unit second;
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6.0};
    unit joule {expo: -1.0};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3.0};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit per_m as
    unit metre {expo: -1.0};
  enddef;
  def unit s_per_m3 as
    unit metre {expo: -3.0};
    unit second;
  enddef;
  def unit m3_per_s2 as
    unit meter {expo: 3.0};
    unit second {expo: -2.0};
  enddef;
  def unit m3_per_s as
    unit second {expo: -1.0};
    unit metre {expo: 3.0};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1.0};
  enddef;

  def comp dorsal_pancreatic__C124 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var l: metre {init: 33.4687e-03};
    var h: metre;
    var r_d: metre {init: 0.558491e-03};
    var r_p: metre {init: 0.558491e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 16.6313e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 15.055e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp dorsal_pancreatic_C124 as
  enddef;

  def comp heart_LH_RH_ABD_RL_LL_RC_LC_H_merged as
  enddef;

  def comp arch_C94 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 43.2111e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 12.2878e-03};
    var rd: metre {init: 10.55e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp aortic_arch_C94 as
  enddef;

  def comp thoracic_aorta_c104 as
  enddef;

  def comp thor__c104 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 15.5561e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 10.2155e-03};
    var rd: metre {init: 9.9229e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp abd1 as
  enddef;

  def comp thoracic_aorta_c112 as
  enddef;

  def comp thor__c112 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 121.566e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 9.82269e-03};
    var rd: metre {init: 7.53574e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp abd2 as
  enddef;

  def comp abdominal_aorta_C114 as
  enddef;

  def comp abd_aorta_C114 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 3.24767e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 7.53574e-03};
    var rd: metre {init: 7.49493e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp abd3 as
  enddef;

  def comp celiac_trunk_C116 as
  enddef;

  def comp celiacTrunk__C116 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 16.9374e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 3.34998e-03};
    var rd: metre {init: 3.21246e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {init: 0.0};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {pub: in};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp abd4 as
  enddef;

  def comp abd5 as
  enddef;

  def comp left_gastric_T3_C120 as
  enddef;

  def comp left_gast_T3_C120 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var l: metre {init: 94.8344e-03};
    var h: metre;
    var r_d: metre {init: 1.50666e-03};
    var r_p: metre {init: 1.50666e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 31.1251e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 1.6495e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp abd6 as
  enddef;

  def comp splenic_T2_C118 as
  enddef;

  def comp splenic__T2C118 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 3.9576e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.16682e-03};
    var rd: metre {init: 2.16682e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(3{dimensionless}*pi)*(1{dimensionless}/(pow(rp, 3{dimensionless})*rd)+1{dimensionless}/(sqr(rp)*sqr(rd))+1{dimensionless}/(rp*pow(rd, 3{dimensionless})));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp abd7 as
  enddef;

  def comp abdominal_aorta_C136 as
  enddef;

  def comp abd_aorta_C136 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 84.2786e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 7.49493e-03};
    var rd: metre {init: 6.81913e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {pub: in};
    var v_out_4: m3_per_s {pub: in};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp abd8 as
  enddef;

  def comp sup_mesenteric_T4_C138 as
  enddef;

  def comp sup_mesentericT4C138 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var l: metre {init: 49.5492e-03};
    var h: metre;
    var rd: metre {init: 3.50112e-03};
    var rp: metre {init: 3.92612e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {init: 0.0};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(rp, 3{dimensionless})*rd)+1{dimensionless}/(sqr(rp)*sqr(rd))+1{dimensionless}/(rp*pow(rd, 3{dimensionless})));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp abd9 as
  enddef;

  def comp renal_R178 as
  enddef;

  def comp renal__R_178 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var l: metre {init: 37.7492e-03};
    var h: metre;
    var rd: metre {init: 2.76112e-03};
    var rp: metre {init: 3.09737e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {init: 0.0};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(rp, 3{dimensionless})*rd)+1{dimensionless}/(sqr(rp)*sqr(rd))+1{dimensionless}/(rp*pow(rd, 3{dimensionless})));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp abd10 as
  enddef;

  def comp abdominal_aorta_C188 as
  enddef;

  def comp abd_aorta_C188 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 54.0907e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 7.11433e-03};
    var rd: metre {init: 6.43458e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp abd11 as
  enddef;

  def comp renal_L166 as
  enddef;

  def comp renal__L_166 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var l: metre {init: 22.0037e-03};
    var h: metre;
    var rd: metre {init: 2.76112e-03};
    var rp: metre {init: 2.76112e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {init: 0.0};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(rp, 3{dimensionless})*rd)+1{dimensionless}/(sqr(rp)*sqr(rd))+1{dimensionless}/(rp*pow(rd, 3{dimensionless})));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp abd12 as
  enddef;

  def comp abdominal_aorta_C192 as
  enddef;

  def comp abd_aorta_C192 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 42.231e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 6.43458e-03};
    var rd: metre {init: 5.90386e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {pub: in};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(3{dimensionless}*pi)*(1{dimensionless}/(pow(rp, 3{dimensionless})*rd)+1{dimensionless}/(sqr(rp)*sqr(rd))+1{dimensionless}/(rp*pow(rd, 3{dimensionless})));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp abd13 as
  enddef;

  def comp inf_mesenteric_T5_C190 as
  enddef;

  def comp inf_mesentericT5C190 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var l: metre {init: 90.3282e-03};
    var h: metre;
    var r_d: metre {init: 2.07748e-03};
    var r_p: metre {init: 2.07748e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 2.16746e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 23.687e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp Abdomen as
  enddef;

  def comp heart_LH_RH_merged as
  enddef;

  def comp axillary__L80 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 120.021e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.301e-03};
    var rd: metre {init: 2.077e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp axillary_L80 as
  enddef;

  def comp block7 as
  enddef;

  def comp arch_C64 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 6.97955e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 12.5685e-03};
    var rd: metre {init: 12.2878e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp aortic_arch_C64 as
  enddef;

  def comp block4 as
  enddef;

  def comp arch_C46 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 9.60849e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 12.9549e-03};
    var rd: metre {init: 12.5685e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp aortic_arch_C46 as
  enddef;

  def comp block2 as
  enddef;

  def comp arch_C2 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 14.4757e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 13.6256e-03};
    var rd: metre {init: 12.9549e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp aortic_arch_C2 as
  enddef;

  def comp block1 as
  enddef;

  def comp ascending_C0 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 60e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 15.95e-03};
    var rd: metre {init: 13.6256e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var Sf_in: m3_per_s {pub: in};
    var u: J_per_m3;
    var u_C_d: J_per_m3 {init: 0.0};
    var u_d: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var v_I: m3_per_s {init: 0.0};
    var v_out: m3_per_s {pub: in};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(3{dimensionless}*pi)*(1{dimensionless}/(pow(rp, 3{dimensionless})*rd)+1{dimensionless}/(sqr(rp)*sqr(rd))+1{dimensionless}/(rp*pow(rd, 3{dimensionless})));
    Rd = 0.01{second}/C;
    ode(v_I, t) = (u-u_d-R*v_I)/I;
    ode(u_C, t) = (Sf_in-v_I)/(C/2{dimensionless});
    ode(u_C_d, t) = (v_I-v_out)/(C/2{dimensionless});
    u = u_C+2{dimensionless}*Rd*(Sf_in-v_I);
    u_d = u_C_d+2{dimensionless}*Rd*(v_I-v_out);
  enddef;

  def comp ascending_aorta_C0 as
  enddef;

  def comp LV as
  enddef;

  def comp LV_output as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second;
    var v_LV: m3_per_s;
    var dv: m3_per_s2 {init: 0};
    var a0: dimensionless {init: 9.674e-05};
    var a1: dimensionless {init: 0.0001364};
    var b1: dimensionless {init: 0.0001125};
    var a2: dimensionless {init: 3.011e-05};
    var b2: dimensionless {init: 0.0001317};
    var a3: dimensionless {init: -3.025e-05};
    var b3: dimensionless {init: 8.194e-05};
    var a4: dimensionless {init: -3.675e-05};
    var b4: dimensionless {init: 3.466e-05};
    var a5: dimensionless {init: -2.669e-05};
    var b5: dimensionless {init: 1.016e-05};
    var a6: dimensionless {init: -1.509e-05};
    var b6: dimensionless {init: -1.615e-06};
    var a7: dimensionless {init: -4.731e-06};
    var b7: dimensionless {init: -4.048e-06};
    var a8: dimensionless {init: -2.427e-07};
    var b8: dimensionless {init: -1.448e-06};
    var w: dimensionless {init: 6.273};
    v_LV = 1{dimensionless}*(a0+a1*cos(t*w)+b1*sin(t*w)+a2*cos(2{dimensionless}*t*w)+b2*sin(2{dimensionless}*t*w)+a3*cos(3{dimensionless}*t*w)+b3*sin(3{dimensionless}*t*w)+a4*cos(4{dimensionless}*t*w)+b4*sin(4{dimensionless}*t*w)+a5*cos(5{dimensionless}*t*w)+b5*sin(5{dimensionless}*t*w)+a6*cos(6{dimensionless}*t*w)+b6*sin(6{dimensionless}*t*w)+a7*cos(7{dimensionless}*t*w)+b7*sin(7{dimensionless}*t*w)+a8*cos(8{dimensionless}*t*w)+b8*sin(8{dimensionless}*t*w));
    ode(dv, t) = v_LV;
  enddef;

  def comp block3 as
  enddef;

  def comp brachio_C4 as
  enddef;

  def comp brachiocephalic_C4 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 47.3822e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 6.72809e-03};
    var rd: metre {init: 6.15874e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block5 as
  enddef;

  def comp subclavian_L66 as
  enddef;

  def comp subclavian__L66 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 49.4669e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 4.89563e-03};
    var rd: metre {init: 3.47908e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block6 as
  enddef;

  def comp subclavian_L78 as
  enddef;

  def comp subclavian__L78 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 41.1396e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 3.47908e-03};
    var rd: metre {init: 2.301e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block8 as
  enddef;

  def comp brachial_L82 as
  enddef;

  def comp brachial__L82 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 223.119e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.077e-03};
    var rd: metre {init: 1.82827e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block9 as
  enddef;

  def comp ulnar_T2_L84 as
  enddef;

  def comp ulnar__T2__L84 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 29.7594e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 1.408e-03};
    var rd: metre {init: 1.408e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block10 as
  enddef;

  def comp radial_T1_L92 as
  enddef;

  def comp radial__T1__L92 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 302.155e-03};
    var h: metre;
    var r_d: metre {init: 1.378e-03};
    var r_p: metre {init: 1.378e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 1.02715e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 49.983e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp block11 as
  enddef;

  def comp post_interosseous_T3_L88 as
  enddef;

  def comp post__Interosseous___T3__L88 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var length: metre {init: 231.695e-03};
    var h: metre;
    var r_d: metre {init: 0.675992e-03};
    var r_p: metre {init: 0.675992e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 4.34948e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 11.804e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp block12 as
  enddef;

  def comp common_interosseous_L86 as
  enddef;

  def comp Interosseous___L86 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var length: metre {init: 16.2681e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 0.959006e-03};
    var rd: metre {init: 0.959006e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block13 as
  enddef;

  def comp ulnar_T2_L90 as
  enddef;

  def comp ulnar___T2__L90 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 239.277e-03};
    var h: metre;
    var r_d: metre {init: 1.408e-03};
    var r_p: metre {init: 1.408e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 1.08553e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 47.295e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp heart_leftHand as
  enddef;

  def comp right_hand as
  enddef;

  def comp post_interosseous__T3__R40 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var l: metre {init: 231.694e-03};
    var h: metre;
    var r_d: metre {init: 0.675992e-03};
    var r_p: metre {init: 0.675992e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 4.33378e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 11.847e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp post_interosseous_T3_R40 as
  enddef;

  def comp rh7 as
  enddef;

  def comp Interosseous___R38 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var length: metre {init: 16.2682e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 0.959006e-03};
    var rd: metre {init: 0.959006e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp common_interosseous_R38 as
  enddef;

  def comp rh6 as
  enddef;

  def comp radial__T1__R44 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 302.156e-03};
    var h: metre;
    var r_d: metre {init: 1.378e-03};
    var r_p: metre {init: 1.378e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 1.04588e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 49.088e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp radial_T1_R44 as
  enddef;

  def comp rh3 as
  enddef;

  def comp brachial__R34 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 223.119e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.077e-03};
    var rd: metre {init: 1.82827e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp brachial_R34 as
  enddef;

  def comp rh2 as
  enddef;

  def comp axillary__R32 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 120.021e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.301e-03};
    var rd: metre {init: 2.077e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp axillary_R32 as
  enddef;

  def comp rh1 as
  enddef;

  def comp subclavian___R28 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 15.7469e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 4.89563e-03};
    var rd: metre {init: 4.17743e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp subclavian_R28 as
  enddef;

  def comp subclavian_R30 as
  enddef;

  def comp subclavian___R30 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 41.1419e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 4.17743e-03};
    var rd: metre {init: 2.301e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp rh4 as
  enddef;

  def comp ulnar_T2_R36 as
  enddef;

  def comp ulnar__T2__R36 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 29.7599e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 1.408e-03};
    var rd: metre {init: 1.408e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp rh5 as
  enddef;

  def comp ulnar_T2_R42 as
  enddef;

  def comp ulnar__T2__R42 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 239.276e-03};
    var h: metre;
    var r_d: metre {init: 1.408e-03};
    var r_p: metre {init: 1.408e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 1.0649e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 48.212e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp heart_LH_RH_ABD_merged as
  enddef;

  def comp Right_Leg as
  enddef;

  def comp post_tibial_T4_R236 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var l: metre {init: 382.987e-03};
    var h: metre;
    var r_d: metre {init: 1.22936e-03};
    var r_p: metre {init: 1.22936e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 1.91761e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 26.773e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp posterior_tibial_T4_R236 as
  enddef;

  def comp rl9 as
  enddef;

  def comp popliteal__R232 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var length: metre {init: 8.80051e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.36768e-03};
    var rd: metre {init: 2.34646e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp popliteal_R232 as
  enddef;

  def comp rl7 as
  enddef;

  def comp ant__tibial_T3R230 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var l: metre {init: 386.388e-03};
    var h: metre;
    var r_d: metre {init: 1.1663e-03};
    var r_p: metre {init: 1.1663e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 2.22296e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 23.096e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp anterior_tibial_T3_R230 as
  enddef;

  def comp rl6 as
  enddef;

  def comp popliteal__R228 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 132.06e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.68614e-03};
    var rd: metre {init: 2.36768e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp popliteal_R228 as
  enddef;

  def comp rl5 as
  enddef;

  def comp femorr__R226 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 319.297e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 3.14372e-03};
    var rd: metre {init: 2.68614e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp femoral_R226 as
  enddef;

  def comp rl4 as
  enddef;

  def comp profunduss__T2_R224 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 238.438e-03};
    var h: metre;
    var r_d: metre {init: 2.14445e-03};
    var r_p: metre {init: 2.14445e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 0.310612e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 165.29e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp profundus_T2_R224 as
  enddef;

  def comp rl3 as
  enddef;

  def comp femorr__R222 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 31.5982e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 3.189e-03};
    var rd: metre {init: 3.14372e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp femoral_R222 as
  enddef;

  def comp rl2 as
  enddef;

  def comp ext_iliac_R220 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 102.358e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 3.37758e-03};
    var rd: metre {init: 3.189e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp external_iliac_R220 as
  enddef;

  def comp rl1 as
  enddef;

  def comp com__iliac__R216 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 76.4393e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 4.49868e-03};
    var rd: metre {init: 4.09113e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp common_iliac_R216 as
  enddef;

  def comp internal_iliac_T1_R218 as
  enddef;

  def comp inter_iliac_T1_R218 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var l: metre {init: 72.5302e-03};
    var h: metre;
    var r_d: metre {init: 2.81829e-03};
    var r_p: metre {init: 2.81829e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 0.375754e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 136.63e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp rl8 as
  enddef;

  def comp tibiofibular_trunk_R234 as
  enddef;

  def comp tibiofibularT_R234 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var length: metre {init: 36.1667e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.34646e-03};
    var rd: metre {init: 2.34646e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp heart_LH_RH_ABD_RL_merged as
  enddef;

  def comp Left_Leg as
  enddef;

  def comp post_tibial_T4_L236 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var l: metre {init: 382.987e-03};
    var h: metre;
    var r_d: metre {init: 1.22936e-03};
    var r_p: metre {init: 1.22936e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 1.91761e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 26.773e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp posterior_tibial_T4_L236 as
  enddef;

  def comp ll9 as
  enddef;

  def comp popliteal__l232 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var length: metre {init: 8.80051e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.36768e-03};
    var rd: metre {init: 2.34646e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp popliteal_l232 as
  enddef;

  def comp ll7 as
  enddef;

  def comp ant__tibial_T3l230 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var l: metre {init: 386.388e-03};
    var h: metre;
    var r_d: metre {init: 1.1663e-03};
    var r_p: metre {init: 1.1663e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 2.22296e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 23.096e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp anterior_tibial_T3_l230 as
  enddef;

  def comp ll6 as
  enddef;

  def comp popliteal__l228 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 132.06e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.68614e-03};
    var rd: metre {init: 2.36768e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp popliteal_l228 as
  enddef;

  def comp ll5 as
  enddef;

  def comp femorr__l226 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 319.297e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 3.14372e-03};
    var rd: metre {init: 2.68614e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp femoral_l226 as
  enddef;

  def comp ll4 as
  enddef;

  def comp profunduss__T2_l224 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 238.438e-03};
    var h: metre;
    var r_d: metre {init: 2.14445e-03};
    var r_p: metre {init: 2.14445e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 0.310612e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 165.29e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp profundus_T2_l224 as
  enddef;

  def comp ll3 as
  enddef;

  def comp femorr__l222 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 31.5982e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 3.189e-03};
    var rd: metre {init: 3.14372e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp femoral_l222 as
  enddef;

  def comp ll2 as
  enddef;

  def comp ext_iliac_l220 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 102.358e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 3.37758e-03};
    var rd: metre {init: 3.189e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp external_iliac_l220 as
  enddef;

  def comp ll1 as
  enddef;

  def comp com__iliac__l216 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 76.4393e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 4.49868e-03};
    var rd: metre {init: 4.09113e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp common_iliac_l216 as
  enddef;

  def comp internal_iliac_T1_l218 as
  enddef;

  def comp inter_iliac_T1_l218 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var l: metre {init: 72.5302e-03};
    var h: metre;
    var r_d: metre {init: 2.81829e-03};
    var r_p: metre {init: 2.81829e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 0.375754e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 136.63e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp ll8 as
  enddef;

  def comp tibiofibular_trunk_l234 as
  enddef;

  def comp tibiofibularT_l234 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var length: metre {init: 36.1667e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.34646e-03};
    var rd: metre {init: 2.34646e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp heart_LH_RH_ABD_RL_LL_merged as
  enddef;

  def comp Right_Carotid as
  enddef;

  def comp int_carotid_R8 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var l: metre {init: 135.108e-03};
    var h: metre;
    var r_d: metre {init: 1.33883e-03};
    var r_p: metre {init: 2.76538e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 0.851183e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 60.317e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp internal_carotid_R8 as
  enddef;

  def comp rc1 as
  enddef;

  def comp com__carotid__R6 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.2e+6};
    var length: metre {init: 81.2532e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 4.47559e-03};
    var rd: metre {init: 3.32624e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp common_carotid_R6 as
  enddef;

  def comp external_carotid_R26 as
  enddef;

  def comp exter_carotid_R26 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 61.0125e-03};
    var h: metre;
    var r_d: metre {init: 2.26547e-03};
    var r_p: metre {init: 2.26547e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 0.851183e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 60.317e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp heart_LH_RH_ABD_RL_LL_RC_merged as
  enddef;

  def comp Left_Carotid as
  enddef;

  def comp int_carotid_L8 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var l: metre {init: 135.108e-03};
    var h: metre;
    var r_d: metre {init: 1.33883e-03};
    var r_p: metre {init: 2.76538e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 0.851183e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 60.317e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp internal_carotid_L8 as
  enddef;

  def comp lc1 as
  enddef;

  def comp com__carotid__L6 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.2e+6};
    var length: metre {init: 121.356e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 4.47559e-03};
    var rd: metre {init: 3.32624e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp common_carotid_L6 as
  enddef;

  def comp external_carotid_L26 as
  enddef;

  def comp exter_carotid_L26 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 61.0125e-03};
    var h: metre;
    var r_d: metre {init: 2.26547e-03};
    var r_p: metre {init: 2.26547e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 0.851183e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 60.317e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp heart_LH_RH_ABD_RL_LL_RC_LC_merged as
  enddef;

  def comp vertebral_R272 as
  enddef;

  def comp vertebral___R272 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 21.0146e-2};
    var h: metre;
    var r_d: metre {init: 0.133527e-2};
    var r_p: metre {init: 0.133527e-2};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 0.851183e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 60.317e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp heart_LH_RH_ABD_RL_LL_RC_LC_H1_merged as
  enddef;

  def comp vertebral_L2 as
  enddef;

  def comp vertebral___L2 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 20.9765e-2};
    var h: metre;
    var r_d: metre {init: 0.133527e-2};
    var r_p: metre {init: 0.133527e-2};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 0.851183e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 60.105e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp Abdomen_ as
  enddef;

  def comp splenic_T2_C122 as
  enddef;

  def comp splenicT2__C122 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 2.79812e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.16682e-03};
    var rd: metre {init: 2.16682e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp Abdomen__ as
  enddef;

  def comp splenic_T2_C126 as
  enddef;

  def comp splenic__T2C126 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var l: metre {init: 63.2749e-03};
    var h: metre;
    var r_d: metre {init: 2.16682e-03};
    var r_p: metre {init: 2.16682e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 0.429028e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 119.67e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp Abdomen___ as
  enddef;

  def comp common_hepatic_C128 as
  enddef;

  def comp common_hepatic__128 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var l: metre {init: 69.3076e-03};
    var h: metre;
    var r_d: metre {init: 2.68614e-03};
    var r_p: metre {init: 2.68614e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 31.1251e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 1.6495e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def group as encapsulation for
    comp Abdomen___ incl
      comp Abdomen__ incl
        comp Abdomen_ incl
          comp heart_LH_RH_ABD_RL_LL_RC_LC_H_merged incl
            comp vertebral_L2 incl
              comp vertebral___L2;
            endcomp;
            comp heart_LH_RH_ABD_RL_LL_RC_LC_H1_merged incl
              comp heart_LH_RH_ABD_RL_LL_RC_LC_merged incl
                comp heart_LH_RH_ABD_RL_LL_RC_merged incl
                  comp heart_LH_RH_ABD_RL_LL_merged incl
                    comp heart_LH_RH_ABD_RL_merged incl
                      comp Right_Leg incl
                        comp posterior_tibial_T4_R236 incl
                          comp post_tibial_T4_R236;
                        endcomp;
                        comp rl9 incl
                          comp tibiofibular_trunk_R234 incl
                            comp tibiofibularT_R234;
                          endcomp;
                          comp rl8 incl
                            comp rl7 incl
                              comp anterior_tibial_T3_R230 incl
                                comp ant__tibial_T3R230;
                              endcomp;
                              comp rl6 incl
                                comp rl5 incl
                                  comp rl4 incl
                                    comp rl3 incl
                                      comp femoral_R222 incl
                                        comp femorr__R222;
                                      endcomp;
                                      comp rl2 incl
                                        comp rl1 incl
                                          comp internal_iliac_T1_R218 incl
                                            comp inter_iliac_T1_R218;
                                          endcomp;
                                          comp common_iliac_R216 incl
                                            comp com__iliac__R216;
                                          endcomp;
                                        endcomp;
                                        comp external_iliac_R220 incl
                                          comp ext_iliac_R220;
                                        endcomp;
                                      endcomp;
                                    endcomp;
                                    comp profundus_T2_R224 incl
                                      comp profunduss__T2_R224;
                                    endcomp;
                                  endcomp;
                                  comp femoral_R226 incl
                                    comp femorr__R226;
                                  endcomp;
                                endcomp;
                                comp popliteal_R228 incl
                                  comp popliteal__R228;
                                endcomp;
                              endcomp;
                            endcomp;
                            comp popliteal_R232 incl
                              comp popliteal__R232;
                            endcomp;
                          endcomp;
                        endcomp;
                      endcomp;
                      comp heart_LH_RH_ABD_merged incl
                        comp heart_LH_RH_merged incl
                          comp right_hand incl
                            comp rh7 incl
                              comp common_interosseous_R38 incl
                                comp Interosseous___R38;
                              endcomp;
                              comp rh6 incl
                                comp rh5 incl
                                  comp ulnar_T2_R36 incl
                                    comp ulnar__T2__R36;
                                  endcomp;
                                  comp rh4 incl
                                    comp rh3 incl
                                      comp rh2 incl
                                        comp rh1 incl
                                          comp subclavian_R28 incl
                                            comp subclavian___R28;
                                          endcomp;
                                          comp subclavian_R30 incl
                                            comp subclavian___R30;
                                          endcomp;
                                        endcomp;
                                        comp axillary_R32 incl
                                          comp axillary__R32;
                                        endcomp;
                                      endcomp;
                                      comp brachial_R34 incl
                                        comp brachial__R34;
                                      endcomp;
                                    endcomp;
                                    comp radial_T1_R44 incl
                                      comp radial__T1__R44;
                                    endcomp;
                                  endcomp;
                                endcomp;
                                comp ulnar_T2_R42 incl
                                  comp ulnar__T2__R42;
                                endcomp;
                              endcomp;
                            endcomp;
                            comp post_interosseous_T3_R40 incl
                              comp post_interosseous__T3__R40;
                            endcomp;
                          endcomp;
                          comp heart_leftHand incl
                            comp ulnar_T2_L90 incl
                              comp ulnar___T2__L90;
                            endcomp;
                            comp block13 incl
                              comp block12 incl
                                comp block11 incl
                                  comp block10 incl
                                    comp ulnar_T2_L84 incl
                                      comp ulnar__T2__L84;
                                    endcomp;
                                    comp block9 incl
                                      comp block8 incl
                                        comp block7 incl
                                          comp subclavian_L78 incl
                                            comp subclavian__L78;
                                          endcomp;
                                          comp block6 incl
                                            comp subclavian_L66 incl
                                              comp subclavian__L66;
                                            endcomp;
                                            comp block5 incl
                                              comp aortic_arch_C64 incl
                                                comp arch_C64;
                                              endcomp;
                                              comp block4 incl
                                                comp brachio_C4 incl
                                                  comp brachiocephalic_C4;
                                                endcomp;
                                                comp block3 incl
                                                  comp block2 incl
                                                    comp block1 incl
                                                      comp LV incl
                                                        comp LV_output;
                                                      endcomp;
                                                      comp ascending_aorta_C0 incl
                                                        comp ascending_C0;
                                                      endcomp;
                                                    endcomp;
                                                    comp aortic_arch_C2 incl
                                                      comp arch_C2;
                                                    endcomp;
                                                  endcomp;
                                                  comp aortic_arch_C46 incl
                                                    comp arch_C46;
                                                  endcomp;
                                                endcomp;
                                              endcomp;
                                            endcomp;
                                          endcomp;
                                        endcomp;
                                        comp axillary_L80 incl
                                          comp axillary__L80;
                                        endcomp;
                                      endcomp;
                                      comp brachial_L82 incl
                                        comp brachial__L82;
                                      endcomp;
                                    endcomp;
                                  endcomp;
                                  comp radial_T1_L92 incl
                                    comp radial__T1__L92;
                                  endcomp;
                                endcomp;
                                comp post_interosseous_T3_L88 incl
                                  comp post__Interosseous___T3__L88;
                                endcomp;
                              endcomp;
                              comp common_interosseous_L86 incl
                                comp Interosseous___L86;
                              endcomp;
                            endcomp;
                          endcomp;
                        endcomp;
                        comp Abdomen incl
                          comp inf_mesenteric_T5_C190 incl
                            comp inf_mesentericT5C190;
                          endcomp;
                          comp abd13 incl
                            comp abdominal_aorta_C192 incl
                              comp abd_aorta_C192;
                            endcomp;
                            comp abd12 incl
                              comp abd11 incl
                                comp abd10 incl
                                  comp renal_R178 incl
                                    comp renal__R_178;
                                  endcomp;
                                  comp abd9 incl
                                    comp sup_mesenteric_T4_C138 incl
                                      comp sup_mesentericT4C138;
                                    endcomp;
                                    comp abd8 incl
                                      comp abd7 incl
                                        comp abd6 incl
                                          comp left_gastric_T3_C120 incl
                                            comp left_gast_T3_C120;
                                          endcomp;
                                          comp abd5 incl
                                            comp abd4 incl
                                              comp abd3 incl
                                                comp abd2 incl
                                                  comp abd1 incl
                                                    comp thoracic_aorta_c104 incl
                                                      comp thor__c104;
                                                    endcomp;
                                                    comp aortic_arch_C94 incl
                                                      comp arch_C94;
                                                    endcomp;
                                                  endcomp;
                                                  comp thoracic_aorta_c112 incl
                                                    comp thor__c112;
                                                  endcomp;
                                                endcomp;
                                                comp abdominal_aorta_C114 incl
                                                  comp abd_aorta_C114;
                                                endcomp;
                                              endcomp;
                                              comp celiac_trunk_C116 incl
                                                comp celiacTrunk__C116;
                                              endcomp;
                                            endcomp;
                                          endcomp;
                                        endcomp;
                                        comp splenic_T2_C118 incl
                                          comp splenic__T2C118;
                                        endcomp;
                                      endcomp;
                                      comp abdominal_aorta_C136 incl
                                        comp abd_aorta_C136;
                                      endcomp;
                                    endcomp;
                                  endcomp;
                                endcomp;
                                comp abdominal_aorta_C188 incl
                                  comp abd_aorta_C188;
                                endcomp;
                              endcomp;
                              comp renal_L166 incl
                                comp renal__L_166;
                              endcomp;
                            endcomp;
                          endcomp;
                        endcomp;
                      endcomp;
                    endcomp;
                    comp Left_Leg incl
                      comp posterior_tibial_T4_L236 incl
                        comp post_tibial_T4_L236;
                      endcomp;
                      comp ll9 incl
                        comp ll8 incl
                          comp ll7 incl
                            comp anterior_tibial_T3_l230 incl
                              comp ant__tibial_T3l230;
                            endcomp;
                            comp ll6 incl
                              comp popliteal_l228 incl
                                comp popliteal__l228;
                              endcomp;
                              comp ll5 incl
                                comp femoral_l226 incl
                                  comp femorr__l226;
                                endcomp;
                                comp ll4 incl
                                  comp profundus_T2_l224 incl
                                    comp profunduss__T2_l224;
                                  endcomp;
                                  comp ll3 incl
                                    comp ll2 incl
                                      comp ll1 incl
                                        comp common_iliac_l216 incl
                                          comp com__iliac__l216;
                                        endcomp;
                                        comp internal_iliac_T1_l218 incl
                                          comp inter_iliac_T1_l218;
                                        endcomp;
                                      endcomp;
                                      comp external_iliac_l220 incl
                                        comp ext_iliac_l220;
                                      endcomp;
                                    endcomp;
                                    comp femoral_l222 incl
                                      comp femorr__l222;
                                    endcomp;
                                  endcomp;
                                endcomp;
                              endcomp;
                            endcomp;
                          endcomp;
                          comp popliteal_l232 incl
                            comp popliteal__l232;
                          endcomp;
                        endcomp;
                        comp tibiofibular_trunk_l234 incl
                          comp tibiofibularT_l234;
                        endcomp;
                      endcomp;
                    endcomp;
                  endcomp;
                  comp Right_Carotid incl
                    comp internal_carotid_R8 incl
                      comp int_carotid_R8;
                    endcomp;
                    comp rc1 incl
                      comp external_carotid_R26 incl
                        comp exter_carotid_R26;
                      endcomp;
                      comp common_carotid_R6 incl
                        comp com__carotid__R6;
                      endcomp;
                    endcomp;
                  endcomp;
                endcomp;
                comp Left_Carotid incl
                  comp internal_carotid_L8 incl
                    comp int_carotid_L8;
                  endcomp;
                  comp lc1 incl
                    comp common_carotid_L6 incl
                      comp com__carotid__L6;
                    endcomp;
                    comp external_carotid_L26 incl
                      comp exter_carotid_L26;
                    endcomp;
                  endcomp;
                endcomp;
              endcomp;
              comp vertebral_R272 incl
                comp vertebral___R272;
              endcomp;
            endcomp;
          endcomp;
          comp dorsal_pancreatic_C124 incl
            comp dorsal_pancreatic__C124;
          endcomp;
        endcomp;
        comp splenic_T2_C122 incl
          comp splenicT2__C122;
        endcomp;
      endcomp;
      comp splenic_T2_C126 incl
        comp splenic__T2C126;
      endcomp;
    endcomp;
    comp common_hepatic_C128 incl
      comp common_hepatic__128;
    endcomp;
  enddef;
  def map between arch_C2 and ascending_C0 for
    vars v_I and v_out;
  enddef;
  def map between LV_output and profunduss__T2_R224 for
    vars t and t;
  enddef;
  def map between inter_iliac_T1_R218 and com__iliac__R216 for
    vars v and v_out_1;
  enddef;
  def map between femorr__R222 and femorr__R226 for
    vars u and u_in;
  enddef;
  def map between subclavian__L78 and axillary__L80 for
    vars u and u_in;
  enddef;
  def map between LV_output and brachiocephalic_C4 for
    vars t and t;
  enddef;
  def map between LV_output and subclavian___R30 for
    vars t and t;
  enddef;
  def map between subclavian___R30 and axillary__R32 for
    vars u and u_in;
  enddef;
  def map between ulnar__T2__R36 and brachial__R34 for
    vars v_I and v_out_2;
  enddef;
  def map between splenic__T2C118 and celiacTrunk__C116 for
    vars v_I and v_out_3;
  enddef;
  def map between LV_output and inter_iliac_T1_l218 for
    vars t and t;
  enddef;
  def map between splenic__T2C126 and splenicT2__C122 for
    vars v and v_out_1;
  enddef;
  def map between brachial__R34 and ulnar__T2__R36 for
    vars u and u_in;
  enddef;
  def map between vertebral___R272 and brachiocephalic_C4 for
    vars v and v_out_2;
  enddef;
  def map between LV_output and arch_C46 for
    vars t and t;
  enddef;
  def map between LV_output and com__iliac__l216 for
    vars t and t;
  enddef;
  def map between arch_C94 and thor__c104 for
    vars u and u_in;
  enddef;
  def map between femorr__R222 and profunduss__T2_R224 for
    vars u and u_in;
  enddef;
  def map between abd_aorta_C192 and com__iliac__R216 for
    vars u and u_in;
  enddef;
  def map between celiacTrunk__C116 and left_gast_T3_C120 for
    vars u and u_in;
  enddef;
  def map between ant__tibial_T3l230 and popliteal__l228 for
    vars v and v_out_1;
  enddef;
  def map between arch_C46 and arch_C64 for
    vars u and u_in;
  enddef;
  def map between brachial__L82 and radial__T1__L92 for
    vars u and u_in;
  enddef;
  def map between popliteal__R228 and ant__tibial_T3R230 for
    vars u and u_in;
  enddef;
  def map between splenic__T2C118 and dorsal_pancreatic__C124 for
    vars u and u_in;
  enddef;
  def map between LV_output and axillary__L80 for
    vars t and t;
  enddef;
  def map between ext_iliac_R220 and femorr__R222 for
    vars u and u_in;
  enddef;
  def map between subclavian___R28 and com__carotid__R6 for
    vars u and u_in;
  enddef;
  def map between brachial__R34 and axillary__R32 for
    vars v_I and v_out_1;
  enddef;
  def map between splenicT2__C122 and splenic__T2C118 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and popliteal__l228 for
    vars t and t;
  enddef;
  def map between LV_output and femorr__l226 for
    vars t and t;
  enddef;
  def map between LV_output and profunduss__T2_l224 for
    vars t and t;
  enddef;
  def map between subclavian__L66 and arch_C64 for
    vars v_I and v_out_1;
  enddef;
  def map between brachial__L82 and axillary__L80 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and arch_C94 for
    vars t and t;
  enddef;
  def map between brachiocephalic_C4 and arch_C2 for
    vars v_I and v_out_2;
  enddef;
  def map between radial__T1__R44 and brachial__R34 for
    vars v and v_out_1;
  enddef;
  def map between left_gast_T3_C120 and celiacTrunk__C116 for
    vars v and v_out_2;
  enddef;
  def map between popliteal__l228 and ant__tibial_T3l230 for
    vars u and u_in;
  enddef;
  def map between com__iliac__l216 and ext_iliac_l220 for
    vars u and u_in;
  enddef;
  def map between tibiofibularT_R234 and post_tibial_T4_R236 for
    vars u and u_in;
  enddef;
  def map between arch_C64 and arch_C94 for
    vars u and u_in;
  enddef;
  def map between LV_output and int_carotid_L8 for
    vars t and t;
  enddef;
  def map between splenicT2__C122 and common_hepatic__128 for
    vars u and u_in;
  enddef;
  def map between profunduss__T2_l224 and femorr__l222 for
    vars v and v_out_1;
  enddef;
  def map between LV_output and thor__c104 for
    vars t and t;
  enddef;
  def map between common_hepatic__128 and splenicT2__C122 for
    vars v and v_out_2;
  enddef;
  def map between LV_output and dorsal_pancreatic__C124 for
    vars t and t;
  enddef;
  def map between post_interosseous__T3__R40 and Interosseous___R38 for
    vars v and v_out_1;
  enddef;
  def map between ulnar___T2__L90 and Interosseous___L86 for
    vars v and v_out_1;
  enddef;
  def map between LV_output and arch_C2 for
    vars t and t;
  enddef;
  def map between exter_carotid_R26 and com__carotid__R6 for
    vars v and v_out_1;
  enddef;
  def map between inf_mesentericT5C190 and abd_aorta_C192 for
    vars v and v_out_1;
  enddef;
  def map between brachiocephalic_C4 and subclavian___R28 for
    vars u and u_in;
  enddef;
  def map between com__carotid__L6 and exter_carotid_L26 for
    vars u and u_in;
  enddef;
  def map between LV_output and abd_aorta_C114 for
    vars t and t;
  enddef;
  def map between LV_output and splenic__T2C118 for
    vars t and t;
  enddef;
  def map between femorr__l226 and femorr__l222 for
    vars v_I and v_out_2;
  enddef;
  def map between subclavian__L78 and subclavian__L66 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and ext_iliac_R220 for
    vars t and t;
  enddef;
  def map between subclavian___R28 and subclavian___R30 for
    vars u and u_in;
  enddef;
  def map between LV_output and renal__L_166 for
    vars t and t;
  enddef;
  def map between LV_output and common_hepatic__128 for
    vars t and t;
  enddef;
  def map between com__carotid__R6 and int_carotid_R8 for
    vars u and u_in;
  enddef;
  def map between celiacTrunk__C116 and splenic__T2C118 for
    vars u and u_in;
  enddef;
  def map between LV_output and popliteal__R232 for
    vars t and t;
  enddef;
  def map between LV_output and post_interosseous__T3__R40 for
    vars t and t;
  enddef;
  def map between com__iliac__l216 and inter_iliac_T1_l218 for
    vars u and u_in;
  enddef;
  def map between LV_output and renal__R_178 for
    vars t and t;
  enddef;
  def map between LV_output and vertebral___R272 for
    vars t and t;
  enddef;
  def map between arch_C64 and subclavian__L66 for
    vars u and u_in;
  enddef;
  def map between thor__c112 and thor__c104 for
    vars v_I and v_out_1;
  enddef;
  def map between abd_aorta_C136 and sup_mesentericT4C138 for
    vars u and u_in;
  enddef;
  def map between subclavian___R30 and subclavian___R28 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and int_carotid_R8 for
    vars t and t;
  enddef;
  def map between LV_output and ant__tibial_T3R230 for
    vars t and t;
  enddef;
  def map between abd_aorta_C192 and com__iliac__l216 for
    vars u and u_in;
  enddef;
  def map between int_carotid_L8 and com__carotid__L6 for
    vars v and v_out_2;
  enddef;
  def map between LV_output and abd_aorta_C192 for
    vars t and t;
  enddef;
  def map between brachial__R34 and radial__T1__R44 for
    vars u and u_in;
  enddef;
  def map between LV_output and tibiofibularT_l234 for
    vars t and t;
  enddef;
  def map between thor__c104 and thor__c112 for
    vars u and u_in;
  enddef;
  def map between arch_C2 and arch_C46 for
    vars u and u_in;
  enddef;
  def map between LV_output and ulnar___T2__L90 for
    vars t and t;
  enddef;
  def map between femorr__l222 and profunduss__T2_l224 for
    vars u and u_in;
  enddef;
  def map between LV_output and vertebral___L2 for
    vars t and t;
  enddef;
  def map between LV_output and thor__c112 for
    vars t and t;
  enddef;
  def map between brachiocephalic_C4 and vertebral___R272 for
    vars u and u_in;
  enddef;
  def map between ulnar__T2__L84 and brachial__L82 for
    vars v_I and v_out_1;
  enddef;
  def map between ascending_C0 and arch_C2 for
    vars u and u_in;
  enddef;
  def map between axillary__L80 and subclavian__L78 for
    vars v_I and v_out_1;
  enddef;
  def map between arch_C46 and com__carotid__L6 for
    vars u and u_in;
  enddef;
  def map between com__iliac__R216 and inter_iliac_T1_R218 for
    vars u and u_in;
  enddef;
  def map between com__carotid__L6 and int_carotid_L8 for
    vars u and u_in;
  enddef;
  def map between inter_iliac_T1_l218 and com__iliac__l216 for
    vars v and v_out_1;
  enddef;
  def map between abd_aorta_C188 and abd_aorta_C136 for
    vars v_I and v_out_3;
  enddef;
  def map between LV_output and post_tibial_T4_L236 for
    vars t and t;
  enddef;
  def map between LV_output and sup_mesentericT4C138 for
    vars t and t;
  enddef;
  def map between LV_output and femorr__R222 for
    vars t and t;
  enddef;
  def map between popliteal__l232 and popliteal__l228 for
    vars v_I and v_out_2;
  enddef;
  def map between abd_aorta_C114 and celiacTrunk__C116 for
    vars u and u_in;
  enddef;
  def map between LV_output and exter_carotid_R26 for
    vars t and t;
  enddef;
  def map between LV_output and post_tibial_T4_R236 for
    vars t and t;
  enddef;
  def map between Interosseous___L86 and ulnar__T2__L84 for
    vars v_I and v_out_2;
  enddef;
  def map between LV_output and splenicT2__C122 for
    vars t and t;
  enddef;
  def map between axillary__L80 and brachial__L82 for
    vars u and u_in;
  enddef;
  def map between LV_output and exter_carotid_L26 for
    vars t and t;
  enddef;
  def map between ext_iliac_R220 and com__iliac__R216 for
    vars v_I and v_out_2;
  enddef;
  def map between com__iliac__R216 and ext_iliac_R220 for
    vars u and u_in;
  enddef;
  def map between ulnar__T2__R36 and Interosseous___R38 for
    vars u and u_in;
  enddef;
  def map between brachial__L82 and ulnar__T2__L84 for
    vars u and u_in;
  enddef;
  def map between ext_iliac_l220 and com__iliac__l216 for
    vars v_I and v_out_2;
  enddef;
  def map between LV_output and splenic__T2C126 for
    vars t and t;
  enddef;
  def map between radial__T1__L92 and brachial__L82 for
    vars v and v_out_2;
  enddef;
  def map between LV_output and femorr__R226 for
    vars t and t;
  enddef;
  def map between exter_carotid_L26 and com__carotid__L6 for
    vars v and v_out_1;
  enddef;
  def map between com__iliac__l216 and abd_aorta_C192 for
    vars v_I and v_out_3;
  enddef;
  def map between arch_C2 and brachiocephalic_C4 for
    vars u and u_in;
  enddef;
  def map between arch_C94 and arch_C64 for
    vars v_I and v_out_2;
  enddef;
  def map between arch_C46 and arch_C2 for
    vars v_I and v_out_1;
  enddef;
  def map between femorr__R226 and popliteal__R228 for
    vars u and u_in;
  enddef;
  def map between post_tibial_T4_L236 and tibiofibularT_l234 for
    vars v and v_out_1;
  enddef;
  def map between post_tibial_T4_R236 and tibiofibularT_R234 for
    vars v and v_out_1;
  enddef;
  def map between com__carotid__R6 and subclavian___R28 for
    vars v_I and v_out_2;
  enddef;
  def map between LV_output and subclavian__L66 for
    vars t and t;
  enddef;
  def map between thor__c112 and abd_aorta_C114 for
    vars u and u_in;
  enddef;
  def map between LV_output and com__carotid__R6 for
    vars t and t;
  enddef;
  def map between com__carotid__L6 and arch_C46 for
    vars v_I and v_out_2;
  enddef;
  def map between LV_output and axillary__R32 for
    vars t and t;
  enddef;
  def map between renal__R_178 and abd_aorta_C136 for
    vars v_I and v_out_2;
  enddef;
  def map between LV_output and ascending_C0 for
    vars v_LV and Sf_in;
    vars t and t;
  enddef;
  def map between LV_output and Interosseous___L86 for
    vars t and t;
  enddef;
  def map between LV_output and subclavian___R28 for
    vars t and t;
  enddef;
  def map between thor__c104 and arch_C94 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and ulnar__T2__R36 for
    vars t and t;
  enddef;
  def map between tibiofibularT_l234 and popliteal__l232 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and ext_iliac_l220 for
    vars t and t;
  enddef;
  def map between profunduss__T2_R224 and femorr__R222 for
    vars v and v_out_1;
  enddef;
  def map between LV_output and com__iliac__R216 for
    vars t and t;
  enddef;
  def map between abd_aorta_C192 and abd_aorta_C188 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and brachial__L82 for
    vars t and t;
  enddef;
  def map between ulnar__T2__L84 and Interosseous___L86 for
    vars u and u_in;
  enddef;
  def map between femorr__l222 and femorr__l226 for
    vars u and u_in;
  enddef;
  def map between LV_output and ant__tibial_T3l230 for
    vars t and t;
  enddef;
  def map between LV_output and left_gast_T3_C120 for
    vars t and t;
  enddef;
  def map between popliteal__l232 and tibiofibularT_l234 for
    vars u and u_in;
  enddef;
  def map between int_carotid_R8 and com__carotid__R6 for
    vars v and v_out_2;
  enddef;
  def map between popliteal__R228 and popliteal__R232 for
    vars u and u_in;
  enddef;
  def map between LV_output and arch_C64 for
    vars t and t;
  enddef;
  def map between LV_output and popliteal__l232 for
    vars t and t;
  enddef;
  def map between LV_output and femorr__l222 for
    vars t and t;
  enddef;
  def map between Interosseous___L86 and ulnar___T2__L90 for
    vars u and u_in;
  enddef;
  def map between splenicT2__C122 and splenic__T2C126 for
    vars u and u_in;
  enddef;
  def map between LV_output and radial__T1__L92 for
    vars t and t;
  enddef;
  def map between axillary__R32 and brachial__R34 for
    vars u and u_in;
  enddef;
  def map between LV_output and radial__T1__R44 for
    vars t and t;
  enddef;
  def map between tibiofibularT_l234 and post_tibial_T4_L236 for
    vars u and u_in;
  enddef;
  def map between LV_output and abd_aorta_C188 for
    vars t and t;
  enddef;
  def map between abd_aorta_C136 and abd_aorta_C188 for
    vars u and u_in;
  enddef;
  def map between abd_aorta_C136 and renal__L_166 for
    vars u and u_in;
  enddef;
  def map between LV_output and popliteal__R228 for
    vars t and t;
  enddef;
  def map between vertebral___L2 and subclavian__L66 for
    vars v and v_out_2;
  enddef;
  def map between LV_output and abd_aorta_C136 for
    vars t and t;
  enddef;
  def map between popliteal__R232 and tibiofibularT_R234 for
    vars u and u_in;
  enddef;
  def map between popliteal__l228 and popliteal__l232 for
    vars u and u_in;
  enddef;
  def map between LV_output and inter_iliac_T1_R218 for
    vars t and t;
  enddef;
  def map between LV_output and ulnar__T2__L84 for
    vars t and t;
  enddef;
  def map between ext_iliac_l220 and femorr__l222 for
    vars u and u_in;
  enddef;
  def map between com__carotid__R6 and exter_carotid_R26 for
    vars u and u_in;
  enddef;
  def map between subclavian__L66 and subclavian__L78 for
    vars u and u_in;
  enddef;
  def map between femorr__R226 and femorr__R222 for
    vars v_I and v_out_2;
  enddef;
  def map between com__iliac__R216 and abd_aorta_C192 for
    vars v_I and v_out_2;
  enddef;
  def map between LV_output and inf_mesentericT5C190 for
    vars t and t;
  enddef;
  def map between ant__tibial_T3R230 and popliteal__R228 for
    vars v and v_out_1;
  enddef;
  def map between abd_aorta_C188 and abd_aorta_C192 for
    vars u and u_in;
  enddef;
  def map between subclavian___R28 and brachiocephalic_C4 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and Interosseous___R38 for
    vars t and t;
  enddef;
  def map between axillary__R32 and subclavian___R30 for
    vars v_I and v_out_1;
  enddef;
  def map between abd_aorta_C192 and inf_mesentericT5C190 for
    vars u and u_in;
  enddef;
  def map between abd_aorta_C136 and abd_aorta_C114 for
    vars v_I and v_out_2;
  enddef;
  def map between LV_output and celiacTrunk__C116 for
    vars t and t;
  enddef;
  def map between splenic__T2C118 and splenicT2__C122 for
    vars u and u_in;
  enddef;
  def map between arch_C64 and arch_C46 for
    vars v_I and v_out_1;
  enddef;
  def map between abd_aorta_C136 and renal__R_178 for
    vars u and u_in;
  enddef;
  def map between Interosseous___R38 and ulnar__T2__R36 for
    vars v_I and v_out_2;
  enddef;
  def map between LV_output and brachial__R34 for
    vars t and t;
  enddef;
  def map between popliteal__R228 and femorr__R226 for
    vars v_I and v_out_1;
  enddef;
  def map between abd_aorta_C114 and thor__c112 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and ulnar__T2__R42 for
    vars t and t;
  enddef;
  def map between popliteal__R232 and popliteal__R228 for
    vars v_I and v_out_2;
  enddef;
  def map between popliteal__l228 and femorr__l226 for
    vars v_I and v_out_1;
  enddef;
  def map between ulnar__T2__L84 and post__Interosseous___T3__L88 for
    vars u and u_in;
  enddef;
  def map between ulnar__T2__R36 and ulnar__T2__R42 for
    vars u and u_in;
  enddef;
  def map between renal__L_166 and abd_aorta_C136 for
    vars v_I and v_out_4;
  enddef;
  def map between LV_output and subclavian__L78 for
    vars t and t;
  enddef;
  def map between ulnar__T2__R42 and ulnar__T2__R36 for
    vars v and v_out_1;
  enddef;
  def map between tibiofibularT_R234 and popliteal__R232 for
    vars v_I and v_out_1;
  enddef;
  def map between post__Interosseous___T3__L88 and ulnar__T2__L84 for
    vars v and v_out_1;
  enddef;
  def map between subclavian__L66 and vertebral___L2 for
    vars u and u_in;
  enddef;
  def map between celiacTrunk__C116 and abd_aorta_C114 for
    vars v_I and v_out_1;
  enddef;
  def map between sup_mesentericT4C138 and abd_aorta_C136 for
    vars v_I and v_out_1;
  enddef;
  def map between femorr__l226 and popliteal__l228 for
    vars u and u_in;
  enddef;
  def map between abd_aorta_C114 and abd_aorta_C136 for
    vars u and u_in;
  enddef;
  def map between LV_output and tibiofibularT_R234 for
    vars t and t;
  enddef;
  def map between LV_output and com__carotid__L6 for
    vars t and t;
  enddef;
  def map between dorsal_pancreatic__C124 and splenic__T2C118 for
    vars v and v_out_2;
  enddef;
  def map between femorr__l222 and ext_iliac_l220 for
    vars v_I and v_out_1;
  enddef;
  def map between Interosseous___R38 and post_interosseous__T3__R40 for
    vars u and u_in;
  enddef;
  def map between femorr__R222 and ext_iliac_R220 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and post__Interosseous___T3__L88 for
    vars t and t;
  enddef;
enddef;
