// modelName model_0
// modelName: axillaryL80
// modelName: axillary_L80
def model model_0 as
  def unit per_m as
    unit metre {expo: -1.0};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3.0};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m3_per_s2 as
    unit meter {expo: 3.0};
    unit second {expo: -2.0};
  enddef;
  def unit J_s_per_m3 as
    unit second;
    unit joule;
    unit metre {expo: -3.0};
  enddef;
  def unit J_s2_per_m6 as
    unit joule;
    unit metre {expo: -6.0};
    unit second {expo: 2.0};
  enddef;
  def unit per_s as
    unit second {expo: -1.0};
  enddef;
  def unit m6_per_J as
    unit joule {expo: -1.0};
    unit metre {expo: 6.0};
  enddef;
  def unit s_per_m3 as
    unit metre {expo: -3.0};
    unit second;
  enddef;
  def unit J_per_m as
    unit metre {expo: -1.0};
    unit joule;
  enddef;
  def unit J_s2_per_m5 as
    unit metre {expo: -5.0};
    unit joule;
    unit second {expo: 2.0};
  enddef;
  def unit J_per_m3 as
    unit metre {expo: -3.0};
    unit joule;
  enddef;
  def unit m3_per_s as
    unit second {expo: -1.0};
    unit metre {expo: 3.0};
  enddef;
  def unit J_s_per_m6 as
    unit joule;
    unit metre {expo: -6.0};
    unit second;
  enddef;

  def comp axillary__L80 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 120.021e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.301e-03};
    var rd: metre {init: 2.077e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp axillary_L80 as
  enddef;

  def comp block7 as
  enddef;

  def comp arch_C64 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 6.97955e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 12.5685e-03};
    var rd: metre {init: 12.2878e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp aortic_arch_C64 as
  enddef;

  def comp block4 as
  enddef;

  def comp arch_C46 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 9.60849e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 12.9549e-03};
    var rd: metre {init: 12.5685e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp aortic_arch_C46 as
  enddef;

  def comp block2 as
  enddef;

  def comp arch_C2 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 14.4757e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 13.6256e-03};
    var rd: metre {init: 12.9549e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp aortic_arch_C2 as
  enddef;

  def comp block1 as
  enddef;

  def comp ascending_C0 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 60e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 15.95e-03};
    var rd: metre {init: 13.6256e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var C00: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var Sf_in: m3_per_s {pub: in};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var u_Rd: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u_C00: J_per_m3 {init: 0.0};
    var v_C00: m3_per_s;
    var v_out: m3_per_s {pub: in};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    C00 = C/2{dimensionless};
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    // 0-junc input
    v_C00 = Sf_in-v_I;
    ode(u_C00, t) = v_C00/C00;
    // 1-junc_a
    u_I = u_C00-u-u_R;
    ode(v_I, t) = u_I/I;
    u_R = R*v_I;
    // 0-junc
    v_C = v_I-v_out;
    // 1-junc_b
    u_C = u-u_Rd;
    u_Rd = Rd*v_C;
    ode(u_C, t) = v_C/C;
  enddef;

  def comp ascending_aorta_C0 as
  enddef;

  def comp LV as
  enddef;

  def comp LV_output as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second;
    var v_LV: m3_per_s;
    var dv: m3_per_s2 {init: 0};
    var a0: dimensionless {init: 9.674e-05};
    var a1: dimensionless {init: 0.0001364};
    var b1: dimensionless {init: 0.0001125};
    var a2: dimensionless {init: 3.011e-05};
    var b2: dimensionless {init: 0.0001317};
    var a3: dimensionless {init: -3.025e-05};
    var b3: dimensionless {init: 8.194e-05};
    var a4: dimensionless {init: -3.675e-05};
    var b4: dimensionless {init: 3.466e-05};
    var a5: dimensionless {init: -2.669e-05};
    var b5: dimensionless {init: 1.016e-05};
    var a6: dimensionless {init: -1.509e-05};
    var b6: dimensionless {init: -1.615e-06};
    var a7: dimensionless {init: -4.731e-06};
    var b7: dimensionless {init: -4.048e-06};
    var a8: dimensionless {init: -2.427e-07};
    var b8: dimensionless {init: -1.448e-06};
    var w: dimensionless {init: 6.273};
    v_LV = a0+a1*cos(t*w)+b1*sin(t*w)+a2*cos(2{dimensionless}*t*w)+b2*sin(2{dimensionless}*t*w)+a3*cos(3{dimensionless}*t*w)+b3*sin(3{dimensionless}*t*w)+a4*cos(4{dimensionless}*t*w)+b4*sin(4{dimensionless}*t*w)+a5*cos(5{dimensionless}*t*w)+b5*sin(5{dimensionless}*t*w)+a6*cos(6{dimensionless}*t*w)+b6*sin(6{dimensionless}*t*w)+a7*cos(7{dimensionless}*t*w)+b7*sin(7{dimensionless}*t*w)+a8*cos(8{dimensionless}*t*w)+b8*sin(8{dimensionless}*t*w);
    ode(dv, t) = v_LV;
  enddef;

  def comp block3 as
  enddef;

  def comp brachio_C4 as
  enddef;

  def comp brachiocephalic_C4 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 47.3822e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 6.72809e-03};
    var rd: metre {init: 6.15874e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block5 as
  enddef;

  def comp subclavian_L66 as
  enddef;

  def comp subclavian__L66 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 49.4669e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 4.89563e-03};
    var rd: metre {init: 3.47908e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block6 as
  enddef;

  def comp subclavian_L78 as
  enddef;

  def comp subclavian__L78 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 41.1396e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 3.47908e-03};
    var rd: metre {init: 2.301e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block8 as
  enddef;

  def comp brachial_L82 as
  enddef;

  def comp brachial__L82 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 223.119e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.077e-03};
    var rd: metre {init: 1.82827e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block9 as
  enddef;

  def comp ulnar_T2_L84 as
  enddef;

  def comp ulnar__T2__L84 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 29.7594e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 1.408e-03};
    var rd: metre {init: 1.408e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block10 as
  enddef;

  def comp radial_T1_L92 as
  enddef;

  def comp radial__T1__L92 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 302.155e-03};
    var h: metre;
    var r_d: metre {init: 1.378e-03};
    var r_p: metre {init: 1.378e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 1.02715e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 49.983e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp block11 as
  enddef;

  def comp post_interosseous_T3_L88 as
  enddef;

  def comp post__Interosseous___T3__L88 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var length: metre {init: 231.695e-03};
    var h: metre;
    var r_d: metre {init: 0.675992e-03};
    var r_p: metre {init: 0.675992e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 4.34948e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 11.804e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp block12 as
  enddef;

  def comp common_interosseous_L86 as
  enddef;

  def comp Interosseous___L86 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var length: metre {init: 16.2681e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 0.959006e-03};
    var rd: metre {init: 0.959006e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block13 as
  enddef;

  def comp ulnar_T2_L90 as
  enddef;

  def comp ulnar___T2__L90 as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 239.277e-03};
    var h: metre;
    var r_d: metre {init: 1.408e-03};
    var r_p: metre {init: 1.408e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 1.08553e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 47.295e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp heart_leftHand as
  enddef;

  def comp right_hand as
  enddef;

  def comp post_interosseous__T3__R40 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var l: metre {init: 231.694e-03};
    var h: metre;
    var r_d: metre {init: 0.675992e-03};
    var r_p: metre {init: 0.675992e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 4.33378e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 11.847e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp post_interosseous_T3_R40 as
  enddef;

  def comp rh7 as
  enddef;

  def comp Interosseous___R38 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 1.6e+6};
    var length: metre {init: 16.2682e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 0.959006e-03};
    var rd: metre {init: 0.959006e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp common_interosseous_R38 as
  enddef;

  def comp rh6 as
  enddef;

  def comp radial__T1__R44 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 302.156e-03};
    var h: metre;
    var r_d: metre {init: 1.378e-03};
    var r_p: metre {init: 1.378e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 1.04588e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 49.088e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def comp radial_T1_R44 as
  enddef;

  def comp rh3 as
  enddef;

  def comp brachial__R34 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 223.119e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.077e-03};
    var rd: metre {init: 1.82827e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp brachial_R34 as
  enddef;

  def comp rh2 as
  enddef;

  def comp axillary__R32 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 120.021e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 2.301e-03};
    var rd: metre {init: 2.077e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp axillary_R32 as
  enddef;

  def comp rh1 as
  enddef;

  def comp subclavian___R28 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 15.7469e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 4.89563e-03};
    var rd: metre {init: 4.17743e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp subclavian_R28 as
  enddef;

  def comp subclavian_R30 as
  enddef;

  def comp subclavian___R30 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.4e+6};
    var length: metre {init: 41.1419e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 4.17743e-03};
    var rd: metre {init: 2.301e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {init: 0.0};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp rh4 as
  enddef;

  def comp ulnar_T2_R36 as
  enddef;

  def comp ulnar__T2__R36 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var length: metre {init: 29.7599e-03};
    var h: metre;
    var r: metre;
    var rp: metre {init: 1.408e-03};
    var rd: metre {init: 1.408e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_3: m3_per_s {init: 0.0};
    var v_out_4: m3_per_s {init: 0.0};
    r = (rp+rd)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2-v_out_3-v_out_4;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp rh5 as
  enddef;

  def comp ulnar_T2_R42 as
  enddef;

  def comp ulnar__T2__R42 as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.8e+6};
    var l: metre {init: 239.276e-03};
    var h: metre;
    var r_d: metre {init: 1.408e-03};
    var r_p: metre {init: 1.408e-03};
    var r: metre;
    var I: J_s2_per_m6;
    var I_e: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var R_v: J_s_per_m6;
    var R_T: J_s_per_m6 {init: 1.0649e+9};
    var R_T_2: J_s_per_m6;
    var C_T: m6_per_J {init: 48.212e-12};
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var alpha: dimensionless {init: 1.0};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_T: J_per_m3 {init: 0.0};
    var v_T: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 100};
    r = (r_p+r_d)/2{dimensionless};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*l/(pi*sqr(r));
    I_e = I*1e-6{dimensionless};
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(3{dimensionless}*pi)*(1{dimensionless}/(pow(r_p, 3{dimensionless})*r_d)+1{dimensionless}/(sqr(r_p)*sqr(r_d))+1{dimensionless}/(r_p*pow(r_d, 3{dimensionless})));
    R_v = 0.01{second}/C;
    R_T_2 = 4{dimensionless}*R_T;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(u_C, t) = (v-v_T)/C;
    u = u_C+R_v*(v-v_T);
    ode(v_T, t) = (u-u_out-u_T-alpha*R_T*v_T)/I_e;
    ode(u_T, t) = (v_T-u_T/(alpha*R_T_2))/C_T;
  enddef;

  def group as encapsulation for
    comp heart_leftHand incl
      comp block13 incl
        comp block12 incl
          comp block11 incl
            comp block10 incl
              comp block9 incl
                comp brachial_L82 incl
                  comp brachial__L82;
                endcomp;
                comp block8 incl
                  comp axillary_L80 incl
                    comp axillary__L80;
                  endcomp;
                  comp block7 incl
                    comp subclavian_L78 incl
                      comp subclavian__L78;
                    endcomp;
                    comp block6 incl
                      comp subclavian_L66 incl
                        comp subclavian__L66;
                      endcomp;
                      comp block5 incl
                        comp aortic_arch_C64 incl
                          comp arch_C64;
                        endcomp;
                        comp block4 incl
                          comp brachio_C4 incl
                            comp brachiocephalic_C4;
                          endcomp;
                          comp block3 incl
                            comp block2 incl
                              comp block1 incl
                                comp ascending_aorta_C0 incl
                                  comp ascending_C0;
                                endcomp;
                                comp LV incl
                                  comp LV_output;
                                endcomp;
                              endcomp;
                              comp aortic_arch_C2 incl
                                comp arch_C2;
                              endcomp;
                            endcomp;
                            comp aortic_arch_C46 incl
                              comp arch_C46;
                            endcomp;
                          endcomp;
                        endcomp;
                      endcomp;
                    endcomp;
                  endcomp;
                endcomp;
              endcomp;
              comp ulnar_T2_L84 incl
                comp ulnar__T2__L84;
              endcomp;
            endcomp;
            comp radial_T1_L92 incl
              comp radial__T1__L92;
            endcomp;
          endcomp;
          comp post_interosseous_T3_L88 incl
            comp post__Interosseous___T3__L88;
          endcomp;
        endcomp;
        comp common_interosseous_L86 incl
          comp Interosseous___L86;
        endcomp;
      endcomp;
      comp ulnar_T2_L90 incl
        comp ulnar___T2__L90;
      endcomp;
    endcomp;
    comp right_hand incl
      comp rh7 incl
        comp rh6 incl
          comp ulnar_T2_R42 incl
            comp ulnar__T2__R42;
          endcomp;
          comp rh5 incl
            comp ulnar_T2_R36 incl
              comp ulnar__T2__R36;
            endcomp;
            comp rh4 incl
              comp radial_T1_R44 incl
                comp radial__T1__R44;
              endcomp;
              comp rh3 incl
                comp rh2 incl
                  comp rh1 incl
                    comp subclavian_R30 incl
                      comp subclavian___R30;
                    endcomp;
                    comp subclavian_R28 incl
                      comp subclavian___R28;
                    endcomp;
                  endcomp;
                  comp axillary_R32 incl
                    comp axillary__R32;
                  endcomp;
                endcomp;
                comp brachial_R34 incl
                  comp brachial__R34;
                endcomp;
              endcomp;
            endcomp;
          endcomp;
        endcomp;
        comp common_interosseous_R38 incl
          comp Interosseous___R38;
        endcomp;
      endcomp;
      comp post_interosseous_T3_R40 incl
        comp post_interosseous__T3__R40;
      endcomp;
    endcomp;
  enddef;
  def map between ascending_C0 and arch_C2 for
    vars u and u_in;
  enddef;
  def map between LV_output and ulnar__T2__R36 for
    vars t and t;
  enddef;
  def map between brachiocephalic_C4 and arch_C2 for
    vars v_I and v_out_2;
  enddef;
  def map between ulnar___T2__L90 and Interosseous___L86 for
    vars v and v_out_1;
  enddef;
  def map between ulnar__T2__R36 and brachial__R34 for
    vars v_I and v_out_2;
  enddef;
  def map between Interosseous___R38 and ulnar__T2__R36 for
    vars v_I and v_out_2;
  enddef;
  def map between LV_output and Interosseous___L86 for
    vars t and t;
  enddef;
  def map between LV_output and subclavian__L78 for
    vars t and t;
  enddef;
  def map between arch_C2 and ascending_C0 for
    vars v_I and v_out;
  enddef;
  def map between arch_C46 and arch_C2 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and ulnar__T2__L84 for
    vars t and t;
  enddef;
  def map between ulnar__T2__L84 and Interosseous___L86 for
    vars u and u_in;
  enddef;
  def map between brachial__L82 and ulnar__T2__L84 for
    vars u and u_in;
  enddef;
  def map between subclavian___R30 and subclavian___R28 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and radial__T1__R44 for
    vars t and t;
  enddef;
  def map between LV_output and brachiocephalic_C4 for
    vars t and t;
  enddef;
  def map between LV_output and brachial__L82 for
    vars t and t;
  enddef;
  def map between LV_output and ascending_C0 for
    vars v_LV and Sf_in;
    vars t and t;
  enddef;
  def map between Interosseous___R38 and post_interosseous__T3__R40 for
    vars u and u_in;
  enddef;
  def map between LV_output and subclavian__L66 for
    vars t and t;
  enddef;
  def map between brachiocephalic_C4 and subclavian___R28 for
    vars u and u_in;
  enddef;
  def map between LV_output and subclavian___R30 for
    vars t and t;
  enddef;
  def map between arch_C46 and arch_C64 for
    vars u and u_in;
  enddef;
  def map between subclavian__L66 and arch_C64 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and post_interosseous__T3__R40 for
    vars t and t;
  enddef;
  def map between LV_output and ulnar___T2__L90 for
    vars t and t;
  enddef;
  def map between axillary__R32 and brachial__R34 for
    vars u and u_in;
  enddef;
  def map between LV_output and axillary__L80 for
    vars t and t;
  enddef;
  def map between LV_output and ulnar__T2__R42 for
    vars t and t;
  enddef;
  def map between brachial__L82 and radial__T1__L92 for
    vars u and u_in;
  enddef;
  def map between axillary__L80 and brachial__L82 for
    vars u and u_in;
  enddef;
  def map between arch_C64 and subclavian__L66 for
    vars u and u_in;
  enddef;
  def map between LV_output and arch_C2 for
    vars t and t;
  enddef;
  def map between LV_output and post__Interosseous___T3__L88 for
    vars t and t;
  enddef;
  def map between ulnar__T2__L84 and post__Interosseous___T3__L88 for
    vars u and u_in;
  enddef;
  def map between post_interosseous__T3__R40 and Interosseous___R38 for
    vars v and v_out_1;
  enddef;
  def map between radial__T1__R44 and brachial__R34 for
    vars v and v_out_1;
  enddef;
  def map between subclavian__L66 and subclavian__L78 for
    vars u and u_in;
  enddef;
  def map between subclavian__L78 and axillary__L80 for
    vars u and u_in;
  enddef;
  def map between post__Interosseous___T3__L88 and ulnar__T2__L84 for
    vars v and v_out_1;
  enddef;
  def map between axillary__R32 and subclavian___R30 for
    vars v_I and v_out_1;
  enddef;
  def map between arch_C64 and arch_C46 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and Interosseous___R38 for
    vars t and t;
  enddef;
  def map between ulnar__T2__R42 and ulnar__T2__R36 for
    vars v and v_out_1;
  enddef;
  def map between LV_output and radial__T1__L92 for
    vars t and t;
  enddef;
  def map between Interosseous___L86 and ulnar___T2__L90 for
    vars u and u_in;
  enddef;
  def map between LV_output and arch_C64 for
    vars t and t;
  enddef;
  def map between LV_output and axillary__R32 for
    vars t and t;
  enddef;
  def map between arch_C2 and brachiocephalic_C4 for
    vars u and u_in;
  enddef;
  def map between radial__T1__L92 and brachial__L82 for
    vars v and v_out_2;
  enddef;
  def map between brachial__L82 and axillary__L80 for
    vars v_I and v_out_1;
  enddef;
  def map between Interosseous___L86 and ulnar__T2__L84 for
    vars v_I and v_out_2;
  enddef;
  def map between ulnar__T2__R36 and Interosseous___R38 for
    vars u and u_in;
  enddef;
  def map between ulnar__T2__L84 and brachial__L82 for
    vars v_I and v_out_1;
  enddef;
  def map between ulnar__T2__R36 and ulnar__T2__R42 for
    vars u and u_in;
  enddef;
  def map between subclavian___R28 and brachiocephalic_C4 for
    vars v_I and v_out_1;
  enddef;
  def map between subclavian___R30 and axillary__R32 for
    vars u and u_in;
  enddef;
  def map between LV_output and subclavian___R28 for
    vars t and t;
  enddef;
  def map between subclavian__L78 and subclavian__L66 for
    vars v_I and v_out_1;
  enddef;
  def map between brachial__R34 and ulnar__T2__R36 for
    vars u and u_in;
  enddef;
  def map between axillary__L80 and subclavian__L78 for
    vars v_I and v_out_1;
  enddef;
  def map between LV_output and brachial__R34 for
    vars t and t;
  enddef;
  def map between LV_output and arch_C46 for
    vars t and t;
  enddef;
  def map between brachial__R34 and axillary__R32 for
    vars v_I and v_out_1;
  enddef;
  def map between arch_C2 and arch_C46 for
    vars u and u_in;
  enddef;
  def map between brachial__R34 and radial__T1__R44 for
    vars u and u_in;
  enddef;
  def map between subclavian___R28 and subclavian___R30 for
    vars u and u_in;
  enddef;
enddef;
